<?xml version='1.0' encoding='UTF-8'?>
<MorpheusModel version="2">
    <Description>
        <Title>Example-Protrusion</Title>
        <Details>Model for cell protrusions using the Act model. 

The Act model defines a local positive feedback mechanism, insprired by actin dynamics, that promotes protrusions in recently active areas.

Reference:
Ioana Niculescu, Johannes Textor, Rob J. de Boer, Crawling and Gliding: A Computational Model for Shape-Driven Cell Migration, PLoS Comp Biol, 2015.
http://journals.plos.org/ploscompbiol/article?id=10.1371/journal.pcbi.1004280</Details>
    </Description>
    <Global>
        <Field symbol="act" value="0" name="actin activity">
            <Diffusion rate="0"/>
        </Field>
        <!--    <Disabled>
        <System solver="euler" time-step="1.0">
            <Rule symbol-ref="act">
                <Expression>act</Expression>
            </Rule>
        </System>
    </Disabled>
-->
    </Global>
    <Space>
        <Lattice class="cubic">
            <Size symbol="size" value="200, 200, 200"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
        </Lattice>
        <SpaceSymbol symbol="space"/>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="5000"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="amoeba">
            <VolumeConstraint target="25000" strength="50"/>
            <SurfaceConstraint target="0.8" strength="5"/>
            <Protrusion field="act" maximum="80" strength="80"/>
            <!--    <Disabled>
        <ConnectivityConstraint/>
    </Disabled>
-->
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="amoeba" type2="medium" value="140"/>
            <Contact type1="medium" type2="medium" value="0"/>
        </Interaction>
        <MCSDuration value="1"/>
        <MetropolisKinetics temperature="20" stepper="edgelist">
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </MetropolisKinetics>
    </CPM>
    <CellPopulations>
        <Population size="0" type="amoeba">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="1, 1, 1" displacements="1, 1, 1">
                    <Object>
                        <Sphere radius="10" center="100,100,100"/>
                    </Object>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="100" interpolation="false" decorate="false">
            <Terminal opacity="0.2" name="png"/>
            <Plot>
                <Cells value="cell.id" slice="100">
                    <!--    <Disabled>
        <ColorMap>
            <Color value="1" color="gray20"/>
            <Color value="0.0" color="gray50"/>
        </ColorMap>
    </Disabled>
-->
                </Cells>
                <Field symbol-ref="act" slice="100"/>
            </Plot>
        </Gnuplotter>
        <TiffPlotter timelapse="true" format="8bit" OME-header="true" compression="false" time-step="100">
            <Channel symbol-ref="cell.id" exclude-medium="true"/>
            <Channel symbol-ref="act"/>
        </TiffPlotter>
    </Analysis>
</MorpheusModel>
