<MorpheusModel version="1">
    <Description>
        <Title>Example-DeltaNotch</Title>
        <Details>Collier, J. R. and Monk, N. A. M. and Maini, P. K. and Lewis, J. H. (1996) Pattern formation by lateral inhibition with feedback: a mathematical model of Delta-Notch intercellular signalling. Journal of Theoretical Biology, 183 (4). pp. 429-446.</Details>
    </Description>
    <Global>
        <Variable symbol="D" value="0.0"/>
        <Variable symbol="Dn" value="0.0"/>
        <Variable symbol="N" value="0.0"/>
    </Global>
    <Space>
        <Lattice class="hexagonal">
            <Size value="20 20 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="periodic"/>
                <Condition boundary="y" type="periodic"/>
            </BoundaryConditions>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="30"/>
        <RandomSeed value="1"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="cells">
            <Property symbol="D" value="0.0" name="Delta"/>
            <Property symbol="N" value="0.0" name="Notch"/>
            <Property symbol="Dn" value="0.0" name="Delta-Neighbors"/>
            <System solver="runge-kutta" time-step="0.02">
                <Constant symbol="a" value="1000" name="Delta_inhibition "/>
                <Constant symbol="b" value="0.01" name="Notch-halftime"/>
                <Constant symbol="n" value="2" name="cooperativity"/>
                <DiffEqn symbol-ref="D">
                    <Expression>1 / (1 + a*N^n) - D</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="N">
                    <Expression>Dn^n / (b + Dn^n) - N</Expression>
                </DiffEqn>
            </System>
            <NeighborhoodReporter>
                <Input scaling="cell" value="D"/>
                <Output symbol-ref="Dn" mapping="average"/>
            </NeighborhoodReporter>
        </CellType>
        <CellType class="medium" name="medium">
            <Property symbol="D" value="0.0" name="Delta"/>
        </CellType>
    </CellTypes>
    <CellPopulations>
        <Population size="0" type="cells">
            <InitCellLattice/>
            <InitProperty symbol-ref="D">
                <Expression>rand_uni(0,0.1)</Expression>
            </InitProperty>
            <InitProperty symbol-ref="N">
                <Expression>rand_uni(0,0.1)</Expression>
            </InitProperty>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="2.5">
            <Terminal name="png"/>
            <Plot>
                <Cells value="D" min="0.0" max="1">
                    <ColorMap>
                        <Color value="0.0" color="white"/>
                        <Color value="0.5" color="yellow"/>
                        <Color value="1" color="red"/>
                    </ColorMap>
                </Cells>
            </Plot>
        </Gnuplotter>
        <Logger time-step="0.25">
            <Format string="D N"/>
            <Input>
                <Cell mapping="all" celltype="cells"/>
            </Input>
            <Plot interval="20" every="2" terminal="png" persist="true">
                <X-axis column="1"/>
                <Y-axis columns="3 4"/>
            </Plot>
        </Logger>
    </Analysis>
</MorpheusModel>
